OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "channel 5" => #1
  Channel List = channel 5
  Action = Select
  Channel Matching Method = Smart
Data=#1 -> Signal display "Raw EEG"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 4
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #7
#3 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 8
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #11
#3 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #15
Data=#15 -> Signal display "alpha power"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 40
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average => #20
Input - A=#7, Input - B=#11, Input - C=#15, Input - D=#20 -> Simple DSP => #21
  Equation = (C/(A+B+C+D))
-> Threshold Crossing Detector
  Threshold = 0
  Cross over threshold = OVTK_StimulationId_Label_01
  Cross under threshold = OVTK_StimulationId_Label_00
  Channel Index = 1
-> Button VRPN Server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
Data=#21 -> Signal display "sign change"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 160
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#21 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream1
  Stream type = EEG

Button VRPN Client
  Peripheral name = openvibe-vrpn@localhost
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
-> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_Label_00
  Cue Image 1 = ${Path_Data}/plugins/simple-visualization/p300-magic-card/01.png
  Stimulation 1 = OVTK_StimulationId_Label_01
